---
API: 2.1
OpenSesame: 3.2.5
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title toet_spel
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 18
set font_italic no
set font_family serif
set font_bold no
set experiment_path "/Volumes/GoogleDrive/Team Drives/TemporalCognition/ContextGame/CogMod"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background white

define form_text_input age
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var age
	set form_title "---"
	set form_question "Vul je leeftijd in (en druk daarna op enter)"
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define sketchpad block_begin
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=38 html=yes show_if=always text="Are you ready for the next part of the experiment?<br /><br />Press space to continue" x=0 y=0 z_index=0

define loop block_loop_LLSS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 5
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	setcycle 0 context 0
	setcycle 0 block_repeat 3
	setcycle 1 practice no
	setcycle 1 context long
	setcycle 1 block_repeat 10
	setcycle 2 practice no
	setcycle 2 context long
	setcycle 2 block_repeat 10
	setcycle 3 practice no
	setcycle 3 context short
	setcycle 3 block_repeat 10
	setcycle 4 practice no
	setcycle 4 context short
	setcycle 4 block_repeat 10
	run block_procedure

define loop block_loop_SSLL
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 5
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	setcycle 0 context 0
	setcycle 0 block_repeat 3
	setcycle 1 practice no
	setcycle 1 context short
	setcycle 1 block_repeat 10
	setcycle 2 practice no
	setcycle 2 context short
	setcycle 2 block_repeat 10
	setcycle 3 practice no
	setcycle 3 context long
	setcycle 3 block_repeat 10
	setcycle 4 practice no
	setcycle 4 context long
	setcycle 4 block_repeat 10
	run block_procedure

define sequence block_procedure
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run block_begin "[practice] = no"
	run practice_begin "[practice] = yes"
	run trial_loop always
	run practice_end "[practice] = yes"

define loop demographics
	set source table
	set repeat 0
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run demographics_loop

define sequence demographics_loop
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run studentnumber always
	run age always
	run handedness always
	run sex always

define sketchpad end_of_experiment
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=38 html=yes show_if=always text="Done!<br /><br />Thanks for participating, and don't forget to upload the resulting CSV file!" x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run experiment_init always
	run demographics always
	run game_loop always
	run end_of_experiment always

define inline_script experiment_init
	set description "Executes Python code"
	set _run ""
	___prepare__
	# Initialize experiment!
	import random
	
	var.version = "0.1"
	
	# Initialize variables
	var.duration = 0 # init
	var.fix_dur = 0 # init
	var.ITI_duration = 0 # Inter Trial Interval
	var.t0 = 0
	var.t1 = 0
	var.t2 = 0
	var.RT = 0
	
	# Set parameters
	var.feedback_duration = 1000 # duration of feedback
	var.prepare_duration = 700 # duration of prepare phase
	# var.ISI_duration = 1500 # Inter Stimulus Interval
	
	var.shortdur_shortcon = 750
	var.longdur_shortcon = 900
	var.shortdur_longcon = 900
	var.longdur_longcon = 1080
	
	var.error_margin = 200
	
	# define sounds
	var.trompet = exp.pool[u'trompet.wav']
	var.tick = exp.pool[u'tick.wav']
	var.tock = exp.pool[u'tock.wav']
	var.beep = exp.pool[u'tone-440Hz-10s.wav']
	
	# Set sounds of player and dirigent
	var.player_sound = var.trompet
	var.dirigent_sound = var.trompet
	
	# define images
	var.dirigent_up = exp.pool[u'dog_up.png']
	var.dirigent_down = exp.pool[u'dog_down.png']
	var.player_up = exp.pool[u'frog_up.png']
	var.player_down = exp.pool[u'frog_down.png']
	var.bars = exp.pool[u'bars.png']
	var.dirigent_color = "red"
	var.player_color = "blue"
	
	def drawDirigent(c, pos):
		# draw the dirigent in up or down position
		if pos == "up":
			c.image(var.dirigent_up, scale = .5, x = var.width / 4, y = -var.height / 4)
		else:
			c.image(var.dirigent_down, scale = .7, x = var.width / 4, y = -var.height / 4)
		c.rect(var.width / 4 - 170, -var.height / 4 - 160, 340, 320, color = var.dirigent_color, penwidth = 5)
		return(c)
		
	def drawPlayer(c, pos):
		# draw the player in up or down position
		if pos == "up":
			c.image(var.player_up, scale = .5, x = -var.width / 4, y = var.height / 4)
		else:
			c.image(var.player_down, scale = .7, x = -var.width / 4, y = var.height / 4)
		c.rect(-var.width / 4 - 170, var.height / 4 - 160, 340, 320, color = var.player_color, penwidth = 5)
		return(c)
	
	def drawITI():
		c = Canvas()
		c = drawDirigent(c, "up")
		c = drawPlayer(c, "up")
		c = drawLuisterText(c)
		return(c)
		
	def drawDuration():
		c = Canvas()
		c = drawDirigent(c, "down")
		c = drawPlayer(c, "up")
		c = drawLuisterText(c)
		return(c)
		
	def drawISI():
		c = Canvas()
		c = drawDirigent(c, "up")
		c = drawPlayer(c, "up")
		c = drawSpeelText(c)
		return(c)
	
	def drawReproduction():
		c = Canvas()
		c = drawDirigent(c, "up")
		c = drawPlayer(c, "down")
		return(c)
			
	def drawFeedback(c, rt, duration):
		bars_width = 500
		bars_height = 145
		bars_x = var.width/4
		bars_y = var.height/4
		text_y = bars_y - bars_height/2 - 10
		x_start = bars_x - bars_width/2 + 70
		x_end_d = x_start + (duration * 0.35 - 45)
		y_d = bars_y + 10
		c['bars'] = Image(var.bars, x = bars_x, y = bars_y)
		c['duration'] = Line(x_start, y_d, x_end_d , y_d, color = var.dirigent_color, penwidth = 10)
		if rt:
			x_end_r = x_start + (rt * 0.35 - 45)
			y_r = bars_y
			if rt - duration < -var.error_margin:
				c.text("That was too short...", x = bars_x, y = text_y)
			elif rt - duration > var.error_margin:
				c.text("That was too long...", x = bars_x, y = text_y)
			else:
				c.text("Well done!", x = bars_x, y = text_y)		
			c['reproduction'] = Line(x_start , y_r, x_end_r , y_r, color = var.player_color, penwidth = 10)
	
		return(c)
	
	def drawLuisterText(c):
		if var.practice == "yes":
			c = drawText(c, "How long does he play?", var.width/4, 0, var.dirigent_color)
		else:
			c = drawText(c, "Listen...", var.width/4, 0, var.dirigent_color)
		return(c)
	
	def drawSpeelText(c):
		if var.practice == "yes":
			c = drawText(c, "Play as long as the dog", -var.width/4, 0, var.player_color)
		else:
			c = drawText(c, "Play...", -var.width/4, 0, var.player_color)
		return(c)
	
	def waitForPress(btn):
		my_keyboard = Keyboard()
		my_keyboard.flush()
		key, time = my_keyboard.get_key(keylist=[btn])
		while key is None:
			key, time = my_keyboard.get_key(keylist=[btn])
			if key is not None:
				break
		return(time)
	
	def drawText(c, text, x, y, color):
		c.text(text, x = x, y = y)
		w, h = c.text_size(text)
		c.rect(x - w/2 - 6, y - h/2 - 6, w + 12, h + 12, color = color, penwidth = 5)
		return(c)
	
	tick = sampler(var.tick)
	tock = sampler(var.tock)
	__end__

define loop game_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run game_procedure

define sequence game_procedure
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run instruct_one_sec always
	run one_sec_loop always
	run instruct_tick_tock always
	run tick_tock_loop always
	run instruct_game always
	run block_loop_SSLL "[subject_parity] = even"
	run block_loop_LLSS "[subject_parity] = odd"

define form_multiple_choice handedness
	set timeout infinite
	set spacing 10
	set question "Ben je links- of rechtshandig"
	__options__
	Links
	Rechts
	__end__
	set margins "50;50;50;50"
	set form_var handedness
	set form_title "---"
	set description "A simple multiple choice item"
	set button_text Verder
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define inline_script instruct_game
	set description "Executes Python code"
	___run__
	
	c = Canvas()
	c.text("Ready with the one second estimations!\n\nIn the next part of the experiment, you will be asked to reproduce\na duration that you heard just before.\n\nPress space to continue to that block")
	c.show()
	
	waitForPress(u'space')
	
	
	canvas_instructions = drawInstructions()
	canvas_instructions.show()
	
	waitForPress(u'space')
	__end__
	___prepare__
	def drawInstructions():
		c = Canvas()
		c = drawDirigent(c, "up")
		c = drawPlayer(c, "up")
		c.text("The dog will play a tone on his trumpet\nand you should reproduce the duration\nof that tone.\nPress the spacebar for the same duration.\n\nFirst some practice trials, with feedback.\n\nPress space to continue.", x = var.width / 4 - 400, y = -var.height / 4)
		return(c)
	__end__

define inline_script instruct_one_sec
	set description "Executes Python code"
	___run__
	c_onesec1.show()
	waitForPress(u'space')
	
	c_onesec2.show()
	__end__
	___prepare__
		
	
	c_onesec1 = Canvas()
	c_onesec1.text("In the next block, you will be asked to estimate a duration\nof 1 second. You will hear a tone, and your task is to press\nthe spacebar when you think the tone has played for one second.\n\nWe're interested in your inner sense of time, so don't count, or\nuse other tricks to estimate one second.\n\nThere will be 20 trials of 1 second estimation.\n\nPress space to get started...")
	
	c_onesec2 = Canvas()
	c_onesec2.text("Press space when you heard the tone for one second\n\nPlease don't count!")
	__end__

define inline_script instruct_tick_tock
	set description "Executes Python code"
	___run__
	c = Canvas()
	c.text("In the next block, you will again be asked to estimate 1 second\ndurations, but now based on a clock that ticks the seconds away.\n\nPress the spaceback to hear the clock tick...\n")
	c.show()
	
	waitForPress(u'space')
	
	drawInstructions_tick_tock()
	
	waitForPress(u'space')
	
	c_tiktak.show()
	__end__
	___prepare__
	def seconde(c_tick, tick):
		c_tick.show()
		tick.play()
		clock.sleep(1000)
		
	def drawInstructions_tick_tock():
		tick = sampler(var.tick)
		tock = sampler(var.tock)
		c_tick = Canvas()
		c_tick.text("Listing how the clock ticks the seconds away...\n\nTick")
		c_tock = Canvas()
		c_tock.text("Listing how the clock ticks the seconds away...\n\nTock")
		c_nujij = Canvas()
		c_nujij.text("In the next block, you'll hear the tick at irregular intervals, and your\ntask to press the spacebar one second after this tick, and thus play the tock at the right\nmoment\n\nPress the spacebar to get started, again 20 trials")
		
		for i in range(5):
			seconde(c_tick, tick)
			seconde(c_tock, tock)
			
		c_nujij.show()
	
	c_tiktak = Canvas()
	c_tiktak.text("Press the spacebar, a second after the tick...\n\n---")
	__end__

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define loop one_sec_loop
	set source table
	set repeat 20
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run one_sec_procedure

define sequence one_sec_procedure
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run one_sec_script always
	run logger always

define inline_script one_sec_script
	set description "Executes Python code"
	___run__
	var.ITI_duration = int(random.uniform(2000, 3000))
	
	clock.sleep(var.ITI_duration)
	
	beep.play()
	var.t0 = clock.time() + 70
	#tick.wait()
	clock.sleep(100)
	var.t1 = waitForPress(u'space')
	beep.stop()
	var.RT = var.t1 - var.t0
	__end__
	___prepare__
	# Change WAV file into something that can be played:
	beep = sampler(var.beep)
	__end__

define sketchpad practice_begin
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=38 html=yes show_if=always text="Are you ready? <br /><br />Press space to continue" x=0 y=0 z_index=0

define sketchpad practice_end
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=38 html=yes show_if=always text="Sufficient practice, let's get started with the experimental trials!<br /><br />There will be 4 blocks of each 10 trials.<br /><br />Press space to continue" x=0 y=0 z_index=0

define inline_script runTrial
	set description "Executes Python code"
	___run__
	# run ITI
	canvas_ITI.show()
	clock.sleep(var.ITI_duration)
	
	# run experimental duration
	sound_dur.play()
	canvas_dur.show()
	sound_dur.wait()
	
	# run ISI (show ISI)
	canvas_ISI.show()
	
	# run reproduction
	while responded == False:
		key, var.t0 = my_keyboard.get_key()
		
		if key is not None:
			sound_reproduction.play()
			canvas_reproduction.show()
		
		while key is not None and responded == False:
			upkey, var.t1 = my_keyboard.get_key_release()
			if upkey is not None:
				responded = True
				break
	
	canvas_ITI.show()
		
	if sound_reproduction.is_playing():
		sound_reproduction.stop()
	
	var.RT = var.t1 - var.t0
	
	if var.practice == "yes":
		# prepare feedback
		canvas_feedback = drawFeedback(canvas_feedback, var.RT, var.duration)
		canvas_feedback.show()
		clock.sleep(var.feedback_duration)
	__end__
	___prepare__
	# prepare ITI
	var.ITI_duration = int(random.uniform(2000, 3000))
	canvas_ITI = drawITI()
	
	# prepare experimental duration
	if var.practice == "no":
		if var.context == "long":
			if var.duration == "long":
				var.duration = var.longdur_longcon
			else:
				var.duration = var.shortdur_longcon	
		elif var.context == "short":
			if var.duration == "long":
				var.duration = var.longdur_shortcon
			else:
				var.duration = var.shortdur_shortcon
		
	elif var.practice == "yes":
		var.duration = int(random.uniform(var.shortdur_shortcon, var.longdur_longcon))
	
	sound_dur = sampler(var.dirigent_sound)
	sound_dur.duration = var.duration
	
	canvas_dur = drawDuration()
	
	# prepare ISI
	canvas_ISI = drawISI()
	if var.practice == "yes":
		canvas_ISI = drawFeedback(canvas_ISI, None, var.duration)
	
	# prepare reproduction
	my_keyboard = Keyboard()
	responded = False
	sound_reproduction= sampler(var.player_sound)
	canvas_reproduction = drawReproduction()
	
	# prepare feedback
	canvas_feedback = Canvas()
	canvas_feedback = drawDirigent(canvas_feedback, "up")
	canvas_feedback = drawPlayer(canvas_feedback, "up")
	__end__

define form_multiple_choice sex
	set timeout infinite
	set spacing 10
	set question "Ben je een jongen of meisje?"
	__options__
	Jongen
	Meisje
	__end__
	set margins "50;50;50;50"
	set form_var sex
	set form_title "---"
	set description "A simple multiple choice item"
	set button_text Verder
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define form_text_input studentnumber
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var age
	set form_title "---"
	set form_question "Enter your student number (so that we can link it to your SlimStampen data):"
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define loop tick_tock_loop
	set source table
	set repeat 20
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run tick_tock_procedure

define sequence tick_tock_procedure
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run tick_tock_script always
	run logger always

define inline_script tick_tock_script
	set description "Executes Python code"
	___run__
	var.ITI_duration = int(random.uniform(2000, 3000))
	
	clock.sleep(var.ITI_duration)
	tick.play()
	var.t0 = clock.time() + 70
	tick.wait()
	clock.sleep(100)
	var.t1 = waitForPress(u'space')
	tock.play()
	var.RT = var.t1 - var.t0
	__end__
	set _prepare ""

define loop trial_loop
	set source_file ""
	set source table
	set repeat "[block_repeat]"
	set order random
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 duration long
	setcycle 1 duration short
	run trial_procedure

define sequence trial_procedure
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run runTrial always
	run logger always

